---
API: 2.1
OpenSesame: 3.2.8b1
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title "eye-capture_GT"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/experimenter/git/DMT2019/eye_capture"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background black

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run in_case_of_connection_failed always
	run eye_detection_license always
	run eyecapture_sequence always

define notepad eye_detection_license
	__note__
	This is the license for the file "haarcascade_eye.xml"
	
	IMPORTANT: READ BEFORE DOWNLOADING, COPYING, INSTALLING OR USING.
	
	By downloading, copying, installing or using the software you agree to this license.
	If you do not agree to this license, do not download, install, copy or use the software.
	
	
	                        Intel License Agreement
	                For Open Source Computer Vision Library
	
	Copyright (C) 2000, Intel Corporation, all rights reserved.
	Third party copyrights are property of their re{"main-item-name": "new_pygaze_wait", "type": "item-snippet", "items": [{"item-type": "pygaze_wait", "item-name": "new_pygaze_wait", "script": ""}]}spective owners.
	
	Redistribution and use in source and binary forms, with or without modification, are permitted provided that the following conditions are met:
	
	   * Redistribution's of source code must retain the above copyright notice, this list of conditions and the following disclaimer.
	
	   * Redistribution's in binary form must reproduce the above copyright notice, this list of conditions and the following disclaimer in the documentation and/or other materials provided with the distribution.
	
	   * The name of Intel Corporation may not be used to endorse or promote products derived from this software without specific prior written permission.
	
	This software is provided by the copyright holders and contributors "as is" and any express or implied warranties, including, but not limited to, the implied warranties of merchantability and fitness for a particular purpose are disclaimed.
	
	In no event shall the Intel Corporation or contributors be liable for any direct, indirect, incidental, special, exemplary, or consequential damages (including, but not limited to, procurement of substitute goods or services;
	 loss of use, data, or profits; or business interruption) however caused and on any theory of liability, whether in contract, strict liability, or tort (including negligence or otherwise) arising in any way out of the use of this software, even if advised of the possibility of such damage.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sequence eyecapture_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run target_loop always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define notepad in_case_of_connection_failed
	__note__
	This is probably due to an old photographer process. This can be killed with:
	
	ps aux | grep photographer
	
	in the output you'll see a line like:
	
	experim+  3106  0.5  0.8 839700 65544 ?        Sl   12:54   0:01 python /home/experimenter/DMT-AD/DMT2019_eyecapture/photographer.py 0 1280 960 50247
	
	Use the kill command with the number in the second column:
	
	kill 3106
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop target_loop
	set source_file "target_durations.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.2 <i>Kafkaesque Koffka</i>" x=0 y=0 z_index=0

