---
API: 2.1
OpenSesame: 3.2.7b1
Platform: posix
---
set width 1920
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start visual_detection
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/experimenter/git/DMT2019/visualDetectionTask"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define sketchpad end_block
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="End of the first block<br /><br />Please inform the experimenter, then touch the screen to continue" x=0 y=0 z_index=0

define inline_script experiment_scriptL
	set description "Executes Python code"
	set _run "# script with experiment information"
	set _prepare ""

define sketchpad fixation
	set duration "[fix_time]"
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=900 y=0 z_index=0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script global_prep
	set description "Executes Python code"
	___run__
	# fixation time - randomise
	var.fix_time = 500
	__end__
	___prepare__
	# prepare steps that only need to happen once
	
	import csv
	
	from libopensesame import sketchpad_elements
	from openexp.keyboard import keyboard
	
	m = Mouse()
	myKeys = keyboard(exp, keylist=['space'])
	
	
	beep = items['beep']
	blank = items['blank']
	
	#response items
	stim, response = items['target'], items['target_mouse_response']
	fixation = items['fixation']
	touch_pad = items['touch_pad']
	
	# target files
	var.target_fileL = 'pointingTask_targets_radial7_left.csv'
	var.target_fileR = 'pointingTask_targets_radial7_right.csv'
	
	def in_bounds(x,y,bounds):
		left, top, right, bottom = bounds
		return x > left and x < right and y > top and y < bottom
	
	def wait_while_lmb_pressed(pressed, timeout=None, bounds=None):
	
		"""
		pressed == True : wait while mouse left button pressed,
		within bounds if present
		pressed == False : wait while mouse left button not pressed
		bounds as (left, top, right, bottom)
		"""
		t0 = clock.time()
		while m.get_pressed()[0] == pressed:
			if pressed and bounds:
				(x, y), time = m.get_pos()
				if not in_bounds(x, y, bounds):
					break
			clock.sleep(1)
			if timeout and clock.time() - t0 >= timeout:
				break
				
	
	# running info for degrees visual angle
	# getting information about degrees visual angle
	import math
	from math import atan2, degrees
	h = 17.5 #monitor height in cm
	d = 40 #distance between pp and monitor
	r = 1080 #vertical resolution of monitor
	deg_perPix = degrees(atan2(.5*h, d))/(.5*r)
	var.pix_perDeg = 1/deg_perPix
	
	var.targetSize_pix = var.pix_perDeg*1.25 #size of target in pixels
	targetSize = var.targetSize_pix*deg_perPix #converting both fix target distance and size into deg
	__end__

define sketchpad intro
	set duration mouseclick
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Target detection task<br /><br />Touchscreen to begin" x=0 y=0 z_index=0

define sequence left
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run loop1 always

define loop loop1
	set source_file "[target_fileL]"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trial_sequence

define loop loop2
	set source_file "[target_fileR]"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run ""

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Displays stimuli"

define sequence right
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run loop2 always

define sketchpad target
	set duration 2000
	set description "Displays stimuli"

define sketchpad touch_pad
	set duration keypress
	set description "Displays stimuli"
	draw rect color=white fill=0 h=64 penwidth=5 show_if=always w=64 x="[touch_x]" y=32 z_index=0
	draw fixdot color=white show_if=always style=default x="[fix_x]" y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_scriptL always
	run fixation always
	run touch_pad always
	run target always

define sequence visual_detection
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run global_prep always
	run intro always
	run left always
	run end_block always
	run right always

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.2 <i>Kafkaesque Koffka</i>" x=0 y=0 z_index=0

